PsychoPy2experiment version="1.65.01"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'01'}
  Save excel file = True
  logging level = warning
  Units = norm
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      letterHeight = 0.2
      startTime = 0.5
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    KeyboardComponent resp
      storeCorrect = True
      forceEndTrial = True
      correctAns = $corrAns
      startTime = 0.5
      allowedKeys = ["left","down","right"]
      storeResponseTime = True
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startTime = 0
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      forceEndTrial = True
      correctAns = thisTrial.corrAns
      startTime = 0
      storeResponseTime = False
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      duration = 2.0
      letterHeight = 0.3
      startTime = 0.0
      font = arial
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    endPoints = [1, 2]
    loopType = random
    nReps = 5
    trialList = [{u'text': u'red', u'congruent': 1, u'corrAns': 1, u'letterColor': u'red'}, {u'text': u'red', u'congruent': 0, u'corrAns': 2, u'letterColor': u'green'}, {u'text': u'green', u'congruent': 1, u'corrAns': 2, u'letterColor': u'green'}, {u'text': u'green', u'congruent': 0, u'corrAns': 3, u'letterColor': u'blue'}, {u'text': u'blue', u'congruent': 1, u'corrAns': 3, u'letterColor': u'blue'}, {u'text': u'blue', u'congruent': 0, u'corrAns': 1, u'letterColor': u'red'}]
    trialListFile = trialTypes.xlsx
    Routine trial
  LoopTerminator trials
  Routine thanks
